Journal
Description: Pulse action inside MDA
Version VersionNumber=2.4

Comment: Pulse, pulling coordinate setting from current magnification selection
Targeted Illumination
  IlluminationSetting = "FRAPPA 488" Override=None OverrideVariable=Illumination setting
  ImageIlluminationSetting = "Confocal 488" Override=None OverrideVariable=Imaging Illumination setting
  CoordinateSetting = "100x Confocal" Override=Variable OverrideVariable=Device.Magnification.Setting
  PositionSetting = 2 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
  PositionImageCoordinatesX = 1000 Override=None OverrideVariable=Position: image coordinate X
  PositionImageCoordinatesY = 1000 Override=None OverrideVariable=Position: image coordinate Y
  NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
  NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
  dExpDurMS = 0.04 Override=None OverrideVariable=Mask Exposure Duration [ms]
