Journal
Description: Creates `objective` variable by microscope objective label. e.g.: create `100` from "Apo TIRF 100x / 1.49 NA". In your camera selection journal, 1) run this journal and 2) set `Device.Magnification.Setting` to e.g. (objective_STR + " Confocal") depending on your camera
Version VersionNumber=2.4

Comment: Assume `/` separates magnification from NA
string_split_position = INSTR(Component.Ti_Objective.PositionLabel,"/")

Comment: Extract 3 digit number before `/`
objective_STR = MID(Component.Ti_Objective.PositionLabel, string_split_position - 5, 3)
objective = VAL(objective_with_leading_space)
Comment: Need this to remove any leading space
objective_STR = STR(objective)
