Journal
Description: Drop Off measurement of Confocal emission.
Version VersionNumber=2.4

Comment: get total of region 1
Select Region
  imSource = m 1 5 9 0 1 -1 -1 8 Untitled
  stRegionLabel = "1"
Configure Show Region Statistics Log
  stLogConfigParam = "O               "
Show Region Statistics
  im = m 1 5 9 0 1 -1 -1 8 Untitled
  bUseThreshold = FALSE
  bEntireImage = FALSE
  channel = 0
Assign Variable
  CenterAverage = ShowRegionStatistics.Integrated
Comment: get average of N-1 regions
Comment: initialize total to 0
Assign Variable
  CornerTotal = 0
Comment: go through all of the rest of the regions
ForNextLoop LoopVariable=RegionNum, StartValue=2, EndValue=Image.NumRegions, StepValue=1
  Select Region
    imSource = m 1 5 9 0 1 -1 -1 8 Untitled
    stRegionLabel = "%RegionNum%"
  Show Region Statistics
    im = m 1 5 9 0 1 -1 -1 8 Untitled
    bUseThreshold = FALSE
    bEntireImage = FALSE
    channel = 0
  Comment: sum up the integrated intensity of the regions
  Assign Variable
    CornerTotal = CornerTotal + ShowRegionStatistics.Integrated
Comment: Calculate average
Assign Variable
  CornerAverage = CornerTotal / (Image.NumRegions - 1)
Comment: Calculate (I1 - In-1) / I1
Assign Variable
  DropOffPercent = (CenterAverage - CornerAverage) / CenterAverage * 100
Trace Expression=DropOffPercent
