Journal
Description: Split NX Dataset into channel stacks
Version VersionNumber=2.4
Comment: Author: Bruce Gonzaga

Enter Variable
  stVariableName = "channels"
  nDialogType = 3
  stDialogTitle = "Number of Channels"
  bEnforceMinMax = TRUE
  dpMin = 2
  dpMax = 10
  dpStepSize = 1
  stDialogPrompt = "# of Channels"
  stDialogList = ""
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1
planes = Image.NumPlanes
Comment: Autoscale is off by default on opened dataset
Scale Image
  imSource = m 1 5 10 0 1 -1 -1 8 Untitled
  range = 1
  autoScale = TRUE
  low = 0
  high = 65535
  autolo = 0
  autohi = 0
  bRedAutoScale = TRUE
  wRedLowScale = 0
  wRedHighScale = 65535
  dpRedLowPercent = 0
  dpRedHighPercent = 0
  bGreenAutoScale = TRUE
  wGreenLowScale = 0
  wGreenHighScale = 65535
  dpGreenLowPercent = 0
  dpGreenHighPercent = 0
  bBlueAutoScale = TRUE
  wBlueLowScale = 0
  wBlueHighScale = 65535
  dpBlueLowPercent = 0
  dpBlueHighPercent = 0
  bScaleROI = FALSE

ForNextLoop LoopVariable=current_channel, StartValue=1, EndValue=channels, StepValue=1
  Trace Expression="Current Channel: " + str(current_channel)
  channel_name = "Channel " + str(current_channel)
  ForNextLoop LoopVariable=current_plane, StartValue=current_channel, EndValue=planes, StepValue=channels
    Select Image
      im = m 1 5 9 0 1 -1 -1 8 Untitled
      prompt = ""
    Trace Expression="Current Image: " + str(current_plane)
    Image.ActivePlane = current_plane
    Add Plane
      imSrcImage = m 1 5 9 0 1 -1 -1 8 Untitled
      imDstImage = "%channel_name%"
      bCloseAfterAdding = FALSE
      nSrcPlane = 9
  Select Image
    im = m 1 7 9 0 1 4 0 8 Untitled
    prompt = ""
  Image.ActivePlane = Image.NumPlanes / 2
  Scale Image
    imSource = m 1 3 10 0 1 -1 -1 8 Untitled
    range = 1
    autoScale = TRUE
    low = 0
    high = 65535
    autolo = 0
    autohi = 0
    bRedAutoScale = TRUE
    wRedLowScale = 0
    wRedHighScale = 65535
    dpRedLowPercent = 0
    dpRedHighPercent = 0
    bGreenAutoScale = TRUE
    wGreenLowScale = 0
    wGreenHighScale = 65535
    dpGreenLowPercent = 0
    dpGreenHighPercent = 0
    bBlueAutoScale = TRUE
    wBlueLowScale = 0
    wBlueHighScale = 65535
    dpBlueLowPercent = 0
    dpBlueHighPercent = 0
    bScaleROI = FALSE
Select Image
  im = m 1 5 9 0 1 -1 -1 8 Untitled
  prompt = ""
Image.ActivePlane = Image.NumPlanes / 2
