Journal
Description: Journal action inside MDA --- use Type = "Multiple timepoints",  and e.g. Initial Point = 30, Interval = 30
Version VersionNumber=2.4

Comment: FIXME: Edit component name below to whichever laser device from main menu > Journal > Variables > Assign Variable > Program
current_laser_power = Component.Ti_TIRF_Angle.Position

new_laser_power = current_laser_power + LASER_POWER_INCREMENT

Comment: FIXME: Double-click Component Control below and change to whichever device you need
Component Control
  stComponentName = "Ti TIRF Angle" Override=None OverrideVariable=Component Name
  dPosition = 295 Override=Variable OverrideVariable=new_laser_power

Comment: Debugging
Comment: FIXME: Edit component name below to whichever laser device from main menu > Journal > Variables > Assign Variable > Program
Disabled Trace Expression=Component.Ti_TIRF_Angle.Position
