Journal
Description: Retrieve laser power for the current illumination.  [Requires] illumination name must end in 3 digits of laser wavelength
Version VersionNumber=2.4

Comment: Get the current illumination name.  This will be used to store the laser power
current_illumination_name = Device.Illumination.Setting

Comment: Extract wavelength from illumination name.  If the channel does not end in 3 digits, the prompt defaults to the first component name
wavelength_STR = RIGHT(current_illumination_name,3)
wavelength = VAL(wavelength_STR)

Comment: Read value from INI file
Get INI String
  stIniPath = "C:\MM\app\mmproc\journals\illumination_values.ini" Override=None OverrideVariable=IniPath
  stIniSection = "Laser Intensities" Override=None OverrideVariable=IniSection
  stIniKey = "Confocal 488" Override=Variable OverrideVariable=current_illumination_name
  stDefaultValue = "None" Override=None OverrideVariable=DefaultValue
  stVariable = "laser_intensity_STR" Override=None OverrideVariable=Variable

Comment: Set component value
IfThenElse Expression=NOT(laser_intensity_STR = "None")
  CodeBlock Condition=true
    laser_intensity = VAL(laser_intensity_STR)
    IfThenElse Expression=wavelength = 405
      CodeBlock Condition=true
        Component.405_Laser_Intensity.Position = laser_intensity
      CodeBlock Condition=false
        IfThenElse Expression=wavelength = 445
          CodeBlock Condition=true
            Component.445_Laser_Intensity.Position = laser_intensity
          CodeBlock Condition=false
            IfThenElse Expression=wavelength = 488
              CodeBlock Condition=true
                Component.488_Laser_Intensity.Position = laser_intensity
              CodeBlock Condition=false
                IfThenElse Expression=wavelength = 515
                  CodeBlock Condition=true
                    Component.515_Laser_Intensity.Position = laser_intensity
                  CodeBlock Condition=false
                    IfThenElse Expression=wavelength = 561
                      CodeBlock Condition=true
                        Component.561_Laser_Intensity.Position = laser_intensity
  CodeBlock Condition=false
    Comment: We could not read the laser intesity.  Leave the laser intensity alone
