Journal
Description: Read INI file with laser intensities, set laser intensity, and save back to INI file
Version VersionNumber=2.4

Comment: Run journal which reads from INI file and applies all laser intensities
Run Journal
  stExecuteJournal = "C:\MM\app\mmproc\journals\laser_get_all_intensities.jnl"

Comment: Have the user set the correct laser intensity
Component Control Interactive
  stComponentName = "ALC Laser 2 Intensity (445 nm)"
  dPosition = 0

Comment: Record the current intensity into a variable
current_laser_intensity = Component.ALC_Laser_2_Intensity__445_nm_.Position

Comment: Save this variable to INI file
Write INI String
  stIniPath = "C:\MM\Confocal.INI" Override=None OverrideVariable=IniPath
  stIniSection = "Laser Intensities" Override=None OverrideVariable=IniSection
  stIniKey = "Laser_445" Override=None OverrideVariable=IniKey
  stExpression = "journal_time_point3" Override=Variable OverrideVariable=current_laser_intensity
