Journal
Description: Record laser power on a per-illumination basis.  [Requires] illumination name must end in 3 digits of laser wavelength
Version VersionNumber=2.4

Comment: Get the current laser intensity if it exists.  This is valuable feedback for the user to see what the intensity was before changing
Run Journal
  stExecuteJournal = "C:\MM\app\mmproc\journals\laser\_get_intensity.jnl"

Comment: Extract wavelength from illumination name.  If the channel does not end in 3 digits, the prompt defaults to the first component name
wavelength_STR = RIGHT(current_illumination_name,3)
wavelength = VAL(wavelength_STR)

Comment: Prompt the user to set the correct intensity
Component Control Interactive
  stComponentName = "405 Laser Intensity" Override=Variable OverrideVariable=wavelength_STR + " Laser Intensity"
  dPosition = 51 Override=LastValue OverrideVariable=Position

Comment: Record intensity from component control into a variable
IfThenElse Expression=wavelength = 405
  CodeBlock Condition=true
    laser_intensity = Component.405_Laser_Intensity.Position
  CodeBlock Condition=false
    IfThenElse Expression=wavelength = 445
      CodeBlock Condition=true
        laser_intensity = Component.445_Laser_Intensity.Position
      CodeBlock Condition=false
        IfThenElse Expression=wavelength = 488
          CodeBlock Condition=true
            laser_intensity = Component.488_Laser_Intensity.Position
          CodeBlock Condition=false
            IfThenElse Expression=wavelength = 515
              CodeBlock Condition=true
                laser_intensity = Component.515_Laser_Intensity.Position
              CodeBlock Condition=false
                IfThenElse Expression=wavelength = 561
                  CodeBlock Condition=true
                    laser_intensity = Component.561_Laser_Intensity.Position

Comment: Store in INI file for persistent storage
Write INI String
  stIniPath = "C:\MM\app\mmproc\journals\illumination_values.ini" Override=None OverrideVariable=IniPath
  stIniSection = "Laser Intensities" Override=None OverrideVariable=IniSection
  stIniKey = "Confocal 488" Override=Variable OverrideVariable=current_illumination_name
  stExpression = "20.000000" Override=Variable OverrideVariable=laser_intensity
