Journal
Description: Create grid image and mask of ROI with the same image size as the original.
Version VersionNumber=2.4
Comment: Populate bounding ROI with smaller ROIs to fill in region. Size of smaller ROIs is determined by size of grid boxes define in "Boxes on Binary Image" step.

Comment: Get mask of bounding ROI
Comment: Create a new binary image to draw the ROI which is the same size as the original.
NewWidth = Image.Width
NewHeight = Image.Height
New
  nWidth = 512 Override=Variable OverrideVariable=NewWidth
  nHeight = 480 Override=Variable OverrideVariable=NewHeight
  nDepth = 1 Override=None OverrideVariable=Depth
  nGray = 0 Override=None OverrideVariable=Gray Value
  nName = "BoundingROI"
  imNew = "New"
  r = 0
  g = 255
  b = 255
  r16 = 0
  g16 = 0
  b16 = 0
Comment: Transfer region from original image to mask of bounding ROI. Clear region from original image.
Transfer Regions
  imSourceImage = m 1 5 9 0 1 -1 -1 8 Untitled
  imDestImage = "BoundingROI"
  nRegionSel = 2
  bSrcClear = TRUE
  bDstClear = FALSE
Paint Region
  imSource = "BoundingROI"
  color = 255
  theRegion = "0 5, 1 65535, 2 61 150, 3 0 0, 4 0, 5 1, 6 100 82 172 82 170 82 169 82 167 82 166 81 165 81 164 81 162 81 161 80 160 80 159 79 158 79 157 79 156 78 155 77 154 77 153 76 153 76 152 75 152 74 151 74 151 73 150 72 150 72 150 72 150 71 150 71 150 70 150 69 151 69 151 68 152 67 152 67 153 66 153 66 154 65 155 64 156 64 157 64 158 63 159 63 160 62 161 62 162 62 164 62 165 61 166 61 167 61 169 61 170 61 171 61 172 61 173 61 175 61 176 62 177 62 178 62 180 62 181 63 182 63 183 64 184 64 185 64 186 65 187 66 188 66 189 67 189 67 190 68 190 69 191 69 191 70 192 71 192 71 192 71 192 72 192 72 192 73 192 74 191 74 191 75 190 76 190 76 189 77 189 77 188 78 187 79 186 79 185 79 184 80 183 80 182 81 181 81 180 81 178 81 177 82 176 82 175 82 173 82 172, 7 1"
  r = 0
  g = 0
  b = 0
  nPaintMode = 2
  nPaintValue = 1
  bUseTheRegion = FALSE
  bPaintLabel = FALSE
  stVariable = ""
Clear Regions
  clearImage = "BoundingROI"

Comment: Create Grid image with same width and height dimensions as current at start
New
  nWidth = 1392 Override=Variable OverrideVariable=NewWidth
  nHeight = 1040 Override=Variable OverrideVariable=NewHeight
  nDepth = 1 Override=None OverrideVariable=Depth
  nGray = 0 Override=None OverrideVariable=Gray Value
  nName = "NewGrid"
  imNew = "New"
  r = 0
  g = 255
  b = 255
  r16 = 0
  g16 = 0
  b16 = 0
Comment: EDIT the next step (#6) to change the size of the grid boxes.
Comment: Draw grid boxes.
Boxes on Binary Image
  im = m 1 7 9 0 1 5 0 9 GridBoxes
  nVert = 4
  nHorz = 4
  nThick = 1
  nColor = 1
  bRenameBoxImage = FALSE
Comment: Invert grid so boxes are white and borders are black.
Morphological Invert
  imSrcIm = m 1 3 9 0 1 -1 -1 8 Untitled
  imDestIm = "Grid"
Close
  im = m 1 7 9 0 1 5 0 8 Untitled
  bSaveIt = FALSE

Comment: Use the Grid Mask and the Bounding ROI mask to populate bounding ROI with multiple regions.
Arithmetic
  iOperation = 8
  iSecondSource = 1
  nNumerator = 0
  nDenominator = 1
  nResultDepth = 1
  imSource1 = "BoundingROI"
  imSource2 = "grid"
  imDest = "SmallROIs"
Comment: Use an IMA state file that will exclude small objects that do not define a full grid box at the edge of the object
Integrated Morphometry - Load State
  imSource = m 1 3 9 0 1 -1 -1 3 AND
  stLoadFileName = "C:\MM\app\mmproc\journals\micropoint\AreaGreaterThan1.IMA"
Integrated Morphometry - Measure
  imSource = m 1 3 9 0 1 -1 -1 3 AND
  nColor = -1
  imMask = m 1 2 9 2 1 -1 -1 8 Untitled
  bMeasureUsingMask = FALSE
Create Regions Around Objects
  imSource = m 1 3 9 0 1 -1 -1 8 Untitled
Resequence Region Labels
  im = m 1 3 10 0 1 -1 -1 8 Untitled

Comment: Transfer small ROIs to original image.
Transfer Regions
  imSourceImage = "SmallROIs"
  imDestImage = m 1 5 9 0 1 -1 -1 11 BoundingROI
  nRegionSel = 2
  bSrcClear = FALSE
  bDstClear = FALSE

Comment: Close intermediate images.
Disabled Close
  im = "BoundingROI"
  bSaveIt = FALSE
Disabled Close
  im = "Grid"
  bSaveIt = FALSE
Disabled Close
  im = "SmallROIs"
  bSaveIt = FALSE
