Journal
Description: Use the mosaic as a shutter to image only an area of interest, then pulse the laser at full power in a different ROI at the specified time point. Immediately after the bleach, perform a 100 frame Stream, then continue normal timelapse collection. 

  [Prerequisites] 
   The Mosaic Targetted Illumination dialog should be configured 
   The first segment of the timelapse should be configured to have 0 time interval, leading up to, at least, the time point used to bleach. 
   The ROIs used for imaging and bleach should be saved prior to running the experiment.  Use the 'Save Image Region' and 'Save Bleach Region' journals to do so. 
   The \Mosaic As Illuminator\Setup Before Running Experiment.JNL should be run prior to running the experiment. 
   
  [References] 
   \Mosaic as Illuminator\Prepare For Recovery.JNL is used to re-configure the Mosaic for imaging after bleaching occurs. 
   \Mosaic as Illuminator\Prepare For Bleach.JNL is used to re-configure the Mosaic for bleaching at the time point prior to the bleach.
Version VersionNumber=2.4
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GFP Mosaic" Override=Variable OverrideVariable=CurIllum
N = N+1
IfThenElse Expression=N=pulseTimePoint
  CodeBlock Condition=true
    RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\Prepare For Recovery.JNL
    Configure Stream Acquisition
      nStreamFrames = 100
      nStreamFramesSkip = 0
      nStreamResMode = 1
      nAcqMode = 1
      nStreamState = 2
      nStreamShutter = 3
      nStreamClear = 2
      nStreamToHardDisk = 1
      bStreamUsesFocusMotor = FALSE
      nStreamStartAt = 3
      nStreamMoveTo = 3
      nStreamAfter = 3
      bStreamUsesIllum = FALSE
      cStreamWavelengths = 1
      stIllumination = "" "" "" ""
      stShutterName = "GFP Mosaic"
      stDiskFilename = ""
      bOverwriteFile = FALSE
      nStreamFramesToAverage = 1
      bPreviewShow = FALSE
      cPreviewFrameInterval = 1
      nDualState = 1
      bSaveDuringAcquire = FALSE
      bStreamUsesSpecificMoves = FALSE
      cSpecificItems = 0
      aiSpecStartFrame = 
      aiSpecFrequency = 
      aiSpecNumber = 
      astSpecComponent = 
      adSpecPosition = 
      aiSpecPin = 
    Stream Acquisition
      imNew = m 1 2 9 2 1 -1 -1 8 Untitled
    Add Plane
      imSrcImage = "Stream"
      imDstImage = "%CurIllum%"
      bCloseAfterAdding = TRUE
      nSrcPlane = 10
  CodeBlock Condition=false
    Acquire
      imDest = "%CurIllum%"
IfThenElse Expression=N=pulseTimePoint-1
  CodeBlock Condition=true
    RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\Prepare For Bleach.JNL
