Journal
Description: Use the mosaic as a shutter to image only an area of interest, then pulse the laser at full power in a different ROI at the specified time point, as part of an MDA experiment. 

  [Prerequisites] 
   The Mosaic Targetted Illumination dialog should be configured for proper magnification, bleach duration, and bleach illumination. 
   MDA should use this journal to run at the 'Start of timepoint' 
   The ROIs used for imaging and bleach should be saved prior to running the experiment.  Use the 'Save Image Region' and 'Save Bleach Region' journals to do so. 
   To ensure proper timing, the time interval for the MDA timelapse should be set to 0.  If a recovery time interval is needed, set it as part of this, or another journal. 
   
  [References] 
   \Mosaic as Illuminator\Prepare For Recovery.JNL is used to re-configure the Mosaic for imaging after bleaching occurs. 
   \Mosaic as Illuminator\Prepare For Bleach.JNL is used to re-configure the Mosaic for bleaching at the time point prior to the bleach.
Version VersionNumber=2.4
Comment: Get current MDA wavelength illumination name
CurIllum = Device.Illumination.Setting
IfThenElse Expression=MDA.Status.TimePointNum=pulseTimePoint
  CodeBlock Condition=true
    RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\Prepare For Bleach.JNL
    Targeted Illumination
      IlluminationSetting = "Mosaic " Override=LastValue OverrideVariable=Illumination setting
      CoordinateSetting = "60X" Override=LastValue OverrideVariable=Coordinate system setting
      PositionSetting = 5 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
      PositionImageCoordinatesX = 100 Override=None OverrideVariable=Position: image coordinate X
      PositionImageCoordinatesY = 100 Override=None OverrideVariable=Position: image coordinate Y
      NumberOfLaserFires = 1 Override=None OverrideVariable=Number of laser pulses
      NeutralDensitySetting = 5 Override=None OverrideVariable=Attenuator plate: % transmission
      dExpDurMS = 1000 Override=Variable OverrideVariable=pulseDuration
    RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\Prepare For Recovery.JNL
