Journal
Description: Prepare Mosaic for Bleaching by clearing the imaging region and loading the bleaching region, triggering laser power, and waiting for the power to be ready.  Default hardware configuration has the laser power at full power for 6 seconds after being triggered.  To ensure the first post-bleach time point is as close to the bleach as possible, and to make sure the laser power is at stand-bye for imaging, we push the pulse to the END of a 6 second delay.

  [Prerequisites]
  The region used to Bleach the sample should be saved into a file called 'bleach.rgn' in the same directory as the journal.  It is easiest to use the 'Save Bleach Region' journal to save the ROI to ensure it is in the proper place.
  The variable 'pulseDuration' should bdefined prior to this journal so the proper wait period is used before bleaching.  This value should be the same as the Duration entered into the Targeted Illumination dialog box used to control the Mosaic bleaching.  It is easiest to set this value via the 'Setup Mosaic Experiment' command on the taskbar.

  [References]
  The 'load bleach region.jnl' journal is called to load the proper ROI and update the Mosaic's mask.
Version VersionNumber=2.4
Comment: Delete current imaging region and load bleach target
Delete Active Region
RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\load bleach region.JNL
Disabled Load Regions
  stFilename = "C:\MM\app\mmproc\journals\Mosaic As Illuminator\bleach.rgn"
  openImage = m 1 5 9 0 1 -1 -1 10 %CurIllum%
Disabled Targeted Illumination Update Mask
  PositionSetting = 3
Comment: Toggle Laser Power illumination setting to get laser to full power.
Component Control
  stComponentName = "Laser Power as Shutter"
  dPosition = -1
Comment: Delay to get to full power
Delay
  dpDelayTime = 200
  nDelayUnits = 1
Comment: Power will be up for 6 seconds, do bleach at END of 6 seconds
Delay
  dpDelayTime = 3 Override=Variable OverrideVariable=6000-(pulseDuration+200)
  nDelayUnits = 1
