Journal
Description: After Bleaching the sample, The mosaic must be re-targetted for the acquisition region.  That means re-setting the Laser Power to standby, clearing the bleaching region, and reloading the imaging region.

  [Prerequisites]
  The ROIs used for imaging the sample should be saved to a file named 'image.rgn' in the same directory as this journal.  It is easiest to use the 'Save Imaging Region' journal to make sure the ROIs get saved to the correct location.
  The variable 'CurIllum' should be defined prior to running this journal.  It represents the illumination setting used for imaging (should have the Mosaic as the Shutter).  The 'CurIllum' variable is read as part of the 'Setup Mosaic Experiment' taskbar command.

  [References]
  The journal 'load image region.jnl' is used to load the proper 'image.rgn' file - the ROIs that should be used for imaging.
Version VersionNumber=2.4
Comment: Turn laser power back to standby
Component Control
  stComponentName = "Laser Power as Shutter"
  dPosition = 0
Delete Active Region
Comment: Reset illumination setting for imaging in MDA experiment
Device.Illumination.Setting = CurIllum
Comment: Reload imaging region
RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\load image region.JNL
Disabled Load Regions
  stFilename = "C:\MM\app\mmproc\journals\Mosaic As Illuminator\image.rgn"
  openImage = m 1 5 9 0 1 -1 -1 10 %CurIllum%
Disabled Targeted Illumination Update Mask
  PositionSetting = 3
