Journal
Description: Configure Regions, time points, and durations for the Targeted Illumination experiments that use the Mosaic as the illuminator and bleaching source.

  The key to the experiment is using two different sets of ROIs, one for imaging, and one for bleaching, and knowing when to switch between them.  This journal is used to record the ROI positions used for the Imaging step and Bleaching step separately.  It also records when the bleach step should occur (so we know when to switch between regions) and what the duration of the bleach is (to work around the 6 second power cycling rate on the Mosaic).

  It also records the illumination to be used for the acquisition steps of the experiment.  As such, this journal should only be run just prior to running the experiment, when the proper illumination is selected, exposure times set, and a representative image can be used to draw ROIs onto.

  [Prerequisites]
  The illumination settings should be set to the same one to use during acquiring the experiment.  To make sure this is the case, this journal should be run after the exposure times are properly configured and a representative image has been snapped.
  The user should have previously setp the experiment's targeting time point and pulse duration, so they can enter the same values into the journal.

  [References]
  The journal uses the 'load image region.jnl' and 'load bleach region.jnl' journals to load the proper ROIs before asking to draw the ROIs.  This will help make it easier to re-run the same experiment.
  The journal uses the 'save image region.jnl' and 'save bleach region.jnl' journals to save the ROIs to the proper location after prompting the user to draw them.
  The journal will again use the 'load image region.jnl' journal at the end to ensure the experiment is ready to begin imaging.
Version VersionNumber=2.4
n = 0
CurIllum = Device.Illumination.Setting
Clear All Regions
  clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\load image region.JNL
Show Message and Wait
  nDisplay = 1
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Mosaic Targeted Illumination"
  stMessage = "\n\nUse the Region Tools to draw the ROIs to be used for IMAGING your sample."
  msgX = 638
  msgY = 26
RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\save image region.JNL
Clear All Regions
  clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\load bleach region.JNL
Show Message and Wait
  nDisplay = 1
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Mosaic Targeted Illumination"
  stMessage = "\n\nUse the Region Tools to draw the ROIs to be used for BLEACHING your sample."
  msgX = 637
  msgY = 26
RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\save bleach region.JNL
Clear All Regions
  clearImage = m 1 5 9 0 1 -1 -1 8 Untitled
RunJournal JournalName=C:\MM\app\mmproc\journals\Mosaic As Illuminator\load image region.JNL
Enter Variable
  stVariableName = "pulseTimePoint"
  nDialogType = 3
  stDialogTitle = "Mosaic Targeted Illumination"
  bEnforceMinMax = TRUE
  dpMin = 1
  dpMax = 65535
  dpStepSize = 1
  stDialogPrompt = "Before which time point are we pulsing?"
  stDialogList = "%GRAYS%\n%COLOR%\n%BOTH%"
  bReturnText = TRUE
  xMessageBox = -1
  yMessageBox = -1
Enter Variable
  stVariableName = "pulseDuration"
  nDialogType = 3
  stDialogTitle = "Moasaic Targeted Illumination"
  bEnforceMinMax = TRUE
  dpMin = 1
  dpMax = 6000
  dpStepSize = 1
  stDialogPrompt = "What is the duration of the laser pulse (in ms)?"
  stDialogList = "%GRAYS%\n%COLOR%\n%BOTH%"
  bReturnText = TRUE
  xMessageBox = -1
  yMessageBox = -1
