Journal
Description: Action inside MDA
Version VersionNumber=2.4
IfThenElse Expression=(MDA.Status.TimePointNum=journal_time_point1) or (MDA.Status.TimePointNum=journal_time_point3)
  CodeBlock Condition=true
    Run Journal
      stExecuteJournal = "C:\MM\app\mmproc\journals\Mosaic Optogenetics\Clear All Regions.jnl"
    Run Journal
      stExecuteJournal = "C:\MM\app\mmproc\journals\Mosaic Optogenetics\_Load Region 1.jnl"
  CodeBlock Condition=false
    IfThenElse Expression=MDA.Status.TimePointNum=journal_time_point2
      CodeBlock Condition=true
        Run Journal
          stExecuteJournal = "C:\MM\app\mmproc\journals\Mosaic Optogenetics\Clear All Regions.jnl"
        Run Journal
          stExecuteJournal = "C:\MM\app\mmproc\journals\Mosaic Optogenetics\_Load Region 1.jnl"
        Run Journal
          stExecuteJournal = "C:\MM\app\mmproc\journals\Mosaic Optogenetics\_Load Region 2.jnl"
