Journal
Description: Pulse action inside MDA
Version VersionNumber=2.4

Comment: Select the last active image window with the ROI
Run Journal
  stExecuteJournal = "C:\MM\app\mmproc\journals\frappa\_load_regions.jnl"

Comment: Pulse, pulling coordinate setting from current magnification selection
Targeted Illumination
  IlluminationSetting = "FRAPPA 488" Override=LastValue OverrideVariable=Illumination setting
  ImageIlluminationSetting = "Confocal 488" Override=LastValue OverrideVariable=Imaging Illumination setting
  CoordinateSetting = "100x Confocal" Override=Variable OverrideVariable=Device.Magnification.Setting
  PositionSetting = 3 Override=LastValue OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
  PositionImageCoordinatesX = 1000 Override=LastValue OverrideVariable=Position: image coordinate X
  PositionImageCoordinatesY = 1000 Override=LastValue OverrideVariable=Position: image coordinate Y
  NumberOfLaserFires = 1 Override=LastValue OverrideVariable=Number of laser pulses
  NeutralDensitySetting = 5 Override=LastValue OverrideVariable=Attenuator plate: % transmission
  dExpDurMS = 0.04 Override=LastValue OverrideVariable=Mask Exposure Duration [ms]
